PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MemoryStudy
  keyboardBackend = ioHub
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Routines
  Routine Mem_Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = Memory test instructions
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    KeyboardComponent End_Instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MemoryTest
    VariableComponent Mem_curImage
      disabled = True
      startVal [time (s)] = 0
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    CodeComponent Mem_Code
      Code Type = Py
      disabled = True
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      Begin Experiment:
        trialClock = core.Clock()
        from os.path import exists
      Begin Routine:
        t = 0
        trialClock.reset()
        imageCount = 0
      Each Frame:
        t = trialClock.getTime()

        Mem_curImage = "This is a test"
        #"C:\\Users\\Psychology\\Documents\\ABExperiment\\MemoryStudy\\resources\\JPG\\" + Image

        imageCount = imageCount + 1


        #C:\Users\Psychology\Documents\ABExperiment\MemoryStudy\resources\JPG
    TextComponent MemTest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = Did you see this image?
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    KeyboardComponent MemResponse
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent Display
      image [set every repeat] = $FullPathName
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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Flow
  Routine Mem_Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Memory_conditionSheet.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'hockeypuck', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'kiwi03', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'lollipop04', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'postalmailbox01', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'parachute', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'rockbass', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'rollerblade', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'saxophone', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'scooter', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'stepladder', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'licenseplate', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'shower', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'stubbywrench01a', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'baseballbat', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'bed', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'foldingchair', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'butterfly', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'car', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'chefshat', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'church', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'duck01', 'FilePath': None},
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    Routine MemoryTest
  LoopTerminator trials
